PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Audio4Track
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import sounddevice as sd
        import soundfile as sf
        import numpy as np
        import scipy.signal as sg

        def rms(d, t=0.1):
            c = np.sqrt(np.mean(d**2))
            return d * (t/c) if c > 1e-9 else d

        def ld(f, hfs):
            d, r = sf.read(f)
            if d.ndim > 1: d = d[:, 0]
            if r != hfs: d = sg.resample(d, int(len(d)*hfs/r))
            return rms(d)

        idx = []
        for i, d in enumerate(sd.query_devices()):
            n = sd.query_hostapis(d['hostapi'])['name']
            if "USB" in d['name'] and d['max_output_channels']==2 and "WASAPI" in n:
                idx.append(i)

        if len(idx) < 2:
            idx = []
            for i, d in enumerate(sd.query_devices()):
                n = sd.query_hostapis(d['hostapi'])['name']
                if "USB" in d['name'] and d['max_output_channels']==2 and "MME" in n:
                    idx.append(i)

        if len(idx) >= 2:
            d1, d2 = idx[0], idx[1]
            hfs = int(sd.query_devices(d1)['default_samplerate'])
        else:
            raise RuntimeError("2 USB devs not found")
      Begin Routine:
        fl = ['1.wav', '2.wav', '3.wav', '4.wav']
        sl = [ld(f, hfs) for f in fl]
        ml = max(len(s) for s in sl)
        pl = [np.pad(s, (0, ml-len(s)), 'constant') for s in sl]

        o1, o2 = np.zeros((ml, 2)), np.zeros((ml, 2))
        o1[:, 0], o1[:, 1] = pl[0], pl[1]
        o2[:, 0], o2[:, 1] = pl[2], pl[3]

        try:
            s1 = sd.OutputStream(device=d1, samplerate=hfs, channels=2)
            s2 = sd.OutputStream(device=d2, samplerate=hfs, channels=2)
            s1.start(); s2.start()
            s1.write(o1.astype(np.float32)); s2.write(o2.astype(np.float32))
            s1.stop(); s2.stop(); s1.close(); s2.close()
        except Exception as e:
            print(e)
Flow
  Routine trial
